<MorpheusModel version="4">
    <Description>
        <Title>Single Genotype to Two Layer Circuit and nonlocal interactions</Title>
        <Details>

Including secretion and chemotaxis from the receiver cells.

References:
Satoshi Toda et al. Science (2018) for experimental set-up
Boareto et al. PNAS (2014) for signalling/lateral inhibition model
 </Details>
    </Description>
    <Global>
        <Variable symbol="N" value="0"/>
        <Variable symbol="D" value="0"/>
        <Variable symbol="Nn" value="0"/>
        <Variable symbol="Dn" value="0"/>
        <Variable symbol="I" value="0"/>
        <Variable symbol="E" value="0"/>
        <Variable symbol="Ad" value="0"/>
        <Variable symbol="is_source" value="0.0"/>
        <Field symbol="c" value="0.0">
            <Diffusion rate="0.05"/>
            <BoundaryValue boundary="x" value="0.0"/>
            <BoundaryValue boundary="-x" value="0.0"/>
            <BoundaryValue boundary="y" value="0.0"/>
            <BoundaryValue boundary="-y" value="0.0"/>
        </Field>
        <System solver="euler" time-step="0.1">
            <Constant symbol="decay" value="0.05"/>
            <DiffEqn symbol-ref="c">
                <Expression>10*is_source-decay*c</Expression>
            </DiffEqn>
        </System>
    </Global>
    <Space>
        <SpaceSymbol symbol="l"/>
        <Lattice class="square">
            <Size symbol="size" value="300, 300, 0"/>
            <BoundaryConditions>
                <Condition boundary="x" type="noflux"/>
                <Condition boundary="y" type="noflux"/>
            </BoundaryConditions>
            <Neighborhood>
                <Order>1</Order>
            </Neighborhood>
        </Lattice>
    </Space>
    <Time>
        <StartTime value="0"/>
        <StopTime value="2e2"/>
        <TimeSymbol symbol="time"/>
        <RandomSeed value="59118345"/>
    </Time>
    <CellTypes>
        <CellType class="biological" name="A">
            <VolumeConstraint target="200" strength="1"/>
            <Property symbol="N" value="1e3" name="notch"/>
            <Property symbol="Nn" value="0.0" name="notch_Neighbours"/>
            <Property symbol="D" value="3e3" name="delta"/>
            <Property symbol="Dn" value="0.0" name="delta_Neighbours"/>
            <Property symbol="I" value="0.0" name="NICD"/>
            <Property symbol="E" value="0.0" name="Ecad"/>
            <Property symbol="Ad" value="0.0" name="adhesive"/>
            <Property symbol="is_source" value="0.0"/>
            <NeighborhoodReporter>
                <Input scaling="cell" value="N"/>
                <Output symbol-ref="Nn" mapping="average"/>
            </NeighborhoodReporter>
            <NeighborhoodReporter>
                <Input scaling="cell" value="D"/>
                <Output symbol-ref="Dn" mapping="average"/>
            </NeighborhoodReporter>
            <System solver="runge-kutta" time-scaling="1" time-step="0.1">
                <Constant symbol="Kc" value="5e-4"/>
                <Constant symbol="Kt" value="5e-5"/>
                <Constant symbol="N0" value="500"/>
                <Constant symbol="D0" value="1000"/>
                <Constant symbol="I0" value="200"/>
                <Constant symbol="gammaI" value="0.5"/>
                <Constant symbol="gamma" value="0.1"/>
                <Constant symbol="p" value="2"/>
                <DiffEqn symbol-ref="N">
                    <Expression>N0*(1+I^p/(I0^p+I^p)) - Kc*N*D - Kt*N*Dn - gamma*N</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="I">
                    <Expression>Kt*N*Dn - gammaI*I </Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="D">
                    <Expression> D0*(I0^p/(I0^p+I^p)) - Kc*N*D - Kt*D*Nn - gamma*D</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="E">
                    <Expression> I^p/(I0^p+I^p) - gamma*E </Expression>
                </DiffEqn>
                <Rule symbol-ref="Ad">
                    <Expression> E^4/(2^4+E^4) </Expression>
                </Rule>
                <Rule symbol-ref="is_source">
                    <Expression> E^4/(2^4+E^4) </Expression>
                </Rule>
            </System>
            <Chemotaxis field="c" strength="10"/>
        </CellType>
        <CellType class="medium" name="medium"/>
    </CellTypes>
    <CPM>
        <Interaction>
            <Contact type1="A" type2="medium" value="15"/>
            <Contact type1="A" type2="A" value="20">
                <!--    <Disabled>
        <AddonAdhesion strength="6.0" adhesive="Ad"/>
    </Disabled>
-->
                <HomophilicAdhesion strength="-1.6" adhesive="E"/>
            </Contact>
        </Interaction>
        <MonteCarloSampler stepper="edgelist">
            <MCSDuration value="0.001"/>
            <Neighborhood>
                <Order>2</Order>
            </Neighborhood>
            <MetropolisKinetics temperature="8"/>
        </MonteCarloSampler>
        <ShapeSurface scaling="norm">
            <Neighborhood>
                <Order>6</Order>
            </Neighborhood>
        </ShapeSurface>
    </CPM>
    <CellPopulations>
        <Population size="0" type="A">
            <InitCircle mode="random" number-of-cells="200">
                <Dimensions radius="size.x/3" center="size.x/2, size.y/2, 0"/>
            </InitCircle>
        </Population>
    </CellPopulations>
    <Analysis>
        <Logger time-step="5">
            <Input>
                <Symbol symbol-ref="N"/>
                <Symbol symbol-ref="D"/>
                <Symbol symbol-ref="I"/>
                <Symbol symbol-ref="E"/>
                <Symbol symbol-ref="Ad"/>
            </Input>
            <Output>
                <TextOutput/>
            </Output>
        </Logger>
        <Gnuplotter time-step="1" decorate="false">
            <Terminal size="800 400 0" persist="true" name="png"/>
            <Plot>
                <Cells value="D" min="0.0" max="1000.0">
                    <ColorMap>
                        <Color value="0.0" color="green"/>
                        <Color value="3000.0" color="red"/>
                    </ColorMap>
                </Cells>
                <Field symbol-ref="c" isolines="5"/>
            </Plot>
        </Gnuplotter>
    </Analysis>
</MorpheusModel>
