<MorpheusModel version="4">
    <Description>
        <Title>Single Genotype to Two Layer Circuit (3D) </Title>
        <Details>
Formation of two-layer structure starting from a single genotype.
Results can be visualized from the output coordinates using,
for example, the python package Vedo.

References:
Satoshi Toda et al. Science (2018) for experimental set-up
Boareto et al. PNAS (2014) for signalling/lateral inhibition model
 </Details>
    </Description>
    <Global>
        <Variable symbol="N" value="0"/>
        <Variable symbol="D" value="0"/>
        <Variable symbol="Nn" value="0"/>
        <Variable symbol="Dn" value="0"/>
        <Variable symbol="I" value="0"/>
        <Variable symbol="E" value="0"/>
        <Variable symbol="Ad" value="0"/>
    </Global>
    <Space>
        <SpaceSymbol symbol="l"/>
        <Lattice class="cubic">
            <Size symbol="size" value="300, 300, 300"/>
            <BoundaryConditions>
                <Condition boundary="x" type="noflux"/>
                <Condition boundary="y" type="noflux"/>
                <Condition boundary="z" type="noflux"/>
                <Condition boundary="-z" type="noflux"/>
            </BoundaryConditions>
            <Neighborhood>
                <Order>1</Order>
            </Neighborhood>
        </Lattice>
    </Space>
    <Time>
        <StartTime value="0"/>
        <StopTime value="2e2"/>
        <TimeSymbol symbol="time"/>
    </Time>
    <CellTypes>
        <CellType class="biological" name="A">
            <VolumeConstraint target="500" strength="1"/>
            <Property symbol="N" value="1e3" name="notch"/>
            <Property symbol="Nn" value="0.0" name="notch_Neighbours"/>
            <Property symbol="D" value="3e3" name="delta"/>
            <Property symbol="Dn" value="0.0" name="delta_Neighbours"/>
            <Property symbol="I" value="0.0" name="NICD"/>
            <Property symbol="E" value="0.0" name="Ecad"/>
            <Property symbol="Ad" value="0.0" name="adhesive"/>
            <NeighborhoodReporter>
                <Input scaling="cell" value="N"/>
                <Output symbol-ref="Nn" mapping="average"/>
            </NeighborhoodReporter>
            <NeighborhoodReporter>
                <Input scaling="cell" value="D"/>
                <Output symbol-ref="Dn" mapping="average"/>
            </NeighborhoodReporter>
            <System solver="runge-kutta" time-scaling="1" time-step="0.1">
                <Constant symbol="Kc" value="5e-4"/>
                <Constant symbol="Kt" value="5e-5"/>
                <Constant symbol="N0" value="500"/>
                <Constant symbol="D0" value="1000"/>
                <Constant symbol="I0" value="200"/>
                <Constant symbol="gammaI" value="0.5"/>
                <Constant symbol="gamma" value="0.1"/>
                <Constant symbol="p" value="2"/>
                <DiffEqn symbol-ref="N">
                    <Expression>N0*(1+I^p/(I0^p+I^p)) - Kc*N*D - Kt*N*Dn - gamma*N</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="I">
                    <Expression>Kt*N*Dn - gammaI*I </Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="D">
                    <Expression> D0*(I0^p/(I0^p+I^p)) - Kc*N*D - Kt*D*Nn - gamma*D</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="E">
                    <Expression> I^p/(I0^p+I^p) - gamma*E </Expression>
                </DiffEqn>
                <Rule symbol-ref="Ad">
                    <Expression> E^4/(2^4+E^4) </Expression>
                </Rule>
            </System>
        </CellType>
        <CellType class="medium" name="medium"/>
    </CellTypes>
    <CPM>
        <Interaction>
            <Contact type1="A" type2="medium" value="22.0"/>
            <Contact type1="A" type2="A" value="11.0">
                <AddonAdhesion strength="10.0" adhesive="Ad"/>
            </Contact>
        </Interaction>
        <MonteCarloSampler stepper="edgelist">
            <MCSDuration value="0.001"/>
            <Neighborhood>
                <Order>2</Order>
            </Neighborhood>
            <MetropolisKinetics temperature="8"/>
        </MonteCarloSampler>
        <ShapeSurface scaling="norm">
            <Neighborhood>
                <Order>6</Order>
            </Neighborhood>
        </ShapeSurface>
    </CPM>
    <CellPopulations>
        <Population size="0" type="A">
            <InitCellObjects mode="distance">
                <Arrangement repetitions="10, 10, 0" displacements="10, 10, 10">
                    <Sphere radius="1.0" center="100.0, 100.0, 0.0"/>
                </Arrangement>
            </InitCellObjects>
        </Population>
    </CellPopulations>
    <Analysis>
        <Logger time-step="10">
            <Input>
                <Symbol symbol-ref="N"/>
                <Symbol symbol-ref="D"/>
                <Symbol symbol-ref="I"/>
                <Symbol symbol-ref="E"/>
                <Symbol symbol-ref="cell.center.x"/>
                <Symbol symbol-ref="cell.center.y"/>
                <Symbol symbol-ref="cell.center.z"/>
            </Input>
            <Output>
                <TextOutput/>
            </Output>
        </Logger>
    </Analysis>
</MorpheusModel>
