<MorpheusModel version="4">
    <Description>
        <Title>Two Layer Circuit_Alternate</Title>
        <Details>
        
Same model with different CPM parameters, showing a distinct behaviour

Here, have two distinct cell types, a sender cell A and a receiver cell B.
The B-type cells are induced by A to express cadherin, which leads to 
cell sorting. For certain parameter values, a two-layer structure
emerges. Blue colour indicates the A-type cells, and green colour indicates
differentiated B-type cells.

References:
Satoshi Toda et al. Science (2018) for experimental set-up
Boareto et al. PNAS (2014) for signalling model
 </Details>
    </Description>
    <Global>
        <Variable symbol="N" value="0"/>
        <Variable symbol="D" value="0"/>
        <Variable symbol="I" value="0"/>
        <Variable symbol="E" value="0"/>
        <Variable symbol="colour" value="0"/>
    </Global>
    <Space>
        <SpaceSymbol symbol="l"/>
        <Lattice class="square">
            <Size symbol="size" value="300, 300, 0"/>
            <BoundaryConditions>
                <Condition boundary="x" type="noflux"/>
                <Condition boundary="y" type="noflux"/>
            </BoundaryConditions>
            <Neighborhood>
                <Order>1</Order>
            </Neighborhood>
        </Lattice>
    </Space>
    <Time>
        <StartTime value="0"/>
        <StopTime value="300"/>
        <TimeSymbol symbol="time"/>
        <RandomSeed value="1234"/>
    </Time>
    <CellTypes>
        <CellType class="biological" name="A">
            <VolumeConstraint target="200" strength="0.1"/>
            <ConnectivityConstraint/>
            <SurfaceConstraint target="1" mode="aspherity" strength="0.4"/>
            <Property symbol="N" value="0.0" name="notch"/>
            <Property symbol="Nn" value="0.0" name="notch_Neighbours"/>
            <Property symbol="D" value="3e3" name="delta"/>
            <Property symbol="Dn" value="0.0" name="delta_Neighbours"/>
            <Property symbol="I" value="0.0" name="NICD"/>
            <Property symbol="E" value="0.0" name="Ecad"/>
            <Property symbol="colour" value="-1.0"/>
            <NeighborhoodReporter>
                <Input scaling="cell" value="N"/>
                <Output symbol-ref="Nn" mapping="average"/>
            </NeighborhoodReporter>
            <NeighborhoodReporter>
                <Input scaling="cell" value="D"/>
                <Output symbol-ref="Dn" mapping="average"/>
            </NeighborhoodReporter>
            <System solver="runge-kutta" time-scaling="1" time-step="0.1">
                <Constant symbol="Kt" value="5e-5"/>
                <Constant symbol="D0" value="1000"/>
                <Constant symbol="gamma" value="0.1"/>
                <Constant symbol="p" value="2"/>
                <DiffEqn symbol-ref="D">
                    <Expression> D0 - Kt*D*Nn - gamma*D</Expression>
                </DiffEqn>
            </System>
        </CellType>
        <CellType class="biological" name="B">
            <VolumeConstraint target="200" strength="0.1"/>
            <ConnectivityConstraint/>
            <SurfaceConstraint target="1" mode="aspherity" strength="0.4"/>
            <Property symbol="N" value="1e3" name="notch"/>
            <Property symbol="Nn" value="0.0" name="notch_Neighbours"/>
            <Property symbol="D" value="0.0" name="delta"/>
            <Property symbol="Dn" value="0.0" name="delta_Neighbours"/>
            <Property symbol="I" value="0.0" name="NICD"/>
            <Property symbol="E" value="0" name="Ecad"/>
            <Property symbol="colour" value="0.0"/>
            <NeighborhoodReporter>
                <Input scaling="cell" value="N"/>
                <Output symbol-ref="Nn" mapping="average"/>
            </NeighborhoodReporter>
            <NeighborhoodReporter>
                <Input scaling="cell" value="D"/>
                <Output symbol-ref="Dn" mapping="average"/>
            </NeighborhoodReporter>
            <System solver="runge-kutta" time-scaling="1" time-step="0.1">
                <Constant symbol="Kt" value="5e-5"/>
                <Constant symbol="N0" value="500"/>
                <Constant symbol="I0" value="200"/>
                <Constant symbol="gammaI" value="0.5"/>
                <Constant symbol="gamma" value="0.1"/>
                <Constant symbol="p" value="2"/>
                <DiffEqn symbol-ref="N">
                    <Expression>N0*(1+I^p/(I0^p+I^p)) - Kt*N*Dn - gamma*N</Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="I">
                    <Expression>Kt*N*Dn - gammaI*I </Expression>
                </DiffEqn>
                <DiffEqn symbol-ref="E">
                    <Expression> (I^p/(I0^p+I^p) - gamma*E) </Expression>
                </DiffEqn>
                <Rule symbol-ref="colour">
                    <Expression>E^4/(2^4+E^4)</Expression>
                </Rule>
            </System>
        </CellType>
        <CellType class="medium" name="medium"/>
    </CellTypes>
    <CPM>
        <Interaction>
            <Contact type1="A" type2="A" value="11.0"/>
            <Contact type1="A" type2="medium" value="22.0"/>
            <Contact type1="B" type2="medium" value="22.0"/>
            <Contact type1="A" type2="B" value="11.0"/>
            <Contact type1="B" type2="B" value="11.0">
                <AddonAdhesion strength="10.0" adhesive="E^4/(2^4+E^4)"/>
            </Contact>
        </Interaction>
        <MonteCarloSampler stepper="edgelist">
            <MCSDuration value="0.001"/>
            <Neighborhood>
                <Order>2</Order>
            </Neighborhood>
            <MetropolisKinetics temperature="20"/>
        </MonteCarloSampler>
        <ShapeSurface scaling="norm">
            <Neighborhood>
                <Order>6</Order>
            </Neighborhood>
        </ShapeSurface>
    </CPM>
    <CellPopulations>
        <Population size="0" type="A">
            <InitCircle mode="regular" number-of-cells="60">
                <Dimensions radius="size.x/3" center="size.x/2, size.y/2, 0"/>
            </InitCircle>
        </Population>
        <Population size="0" type="B">
            <InitCircle mode="regular" number-of-cells="40">
                <Dimensions radius="size.x/3" center="size.x/2, size.y/2, 0"/>
            </InitCircle>
        </Population>
    </CellPopulations>
    <Analysis>
        <Logger time-step="1">
            <Input>
                <Symbol symbol-ref="D"/>
                <Symbol symbol-ref="N"/>
                <Symbol symbol-ref="I"/>
                <Symbol symbol-ref="E"/>
                <Symbol symbol-ref="cell.type"/>
                <Symbol symbol-ref="cell.center.x"/>
                <Symbol symbol-ref="cell.center.y"/>
                <Symbol symbol-ref="Dn"/>
            </Input>
            <Output>
                <TextOutput/>
            </Output>
        </Logger>
        <Gnuplotter time-step="1" decorate="false">
            <Terminal size="800 400 0" persist="true" name="png"/>
            <Plot>
                <Cells value="colour" min="-1.0" max="1.0">
                    <ColorMap>
                        <Color value="-1" color="blue"/>
                        <Color value="0.0" color="grey"/>
                        <Color value="1.0" color="green"/>
                    </ColorMap>
                </Cells>
            </Plot>
        </Gnuplotter>
    </Analysis>
</MorpheusModel>
